PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = norm
  Window size (pixels) = [1200, 700]
  expName = Santa_Game
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import numpy as np
      Begin Experiment:
        # trial duration in [s] (each target should appear for 1 second)
        # used for all image components (background, santa and target) as duration (s)
        trial_dur = 2

        # Highscore
        score = 0
      Begin Routine:
        # create random target x- and y-coordinates
        # between -0.9/-0.7 and 0.9 (norm units, see assignments)
        target_x = np.random.uniform(-0.9, 0.9)
        target_y = np.random.uniform(-0.7, 0.9)
      Each Frame:
        # message for score count
        msg_score = 'Score: '+str(score)

        msg_gameover = 'Your Score: '+str(score)
    ImageComponent background
      image = background.jpg
      size = [-2, 2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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    ImageComponent santa
      flipHoriz = True
      image = santa.png
      size = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
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    ImageComponent target
      image [set every repeat] = $imageFile
      pos [set every frame] = (target_x, target_y)
      size = 0.2
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $trial_dur
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    TextComponent score_txt
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_dur
      text [set every repeat] = $msg_score
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  Routine end
    TextComponent text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg_gameover
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = santa_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': 'clipart_present/clipartpresent0.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent1.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent10.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent11.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent12.gif', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent15.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent17.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent18.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent19.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent20.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent21.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent24.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent25.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent28.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent3.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent30.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent33.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent34.jpeg', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent39.png', 'type': 'present'},
      {'imageFile': 'clipart_present/clipartpresent4.jpeg', 'type': 'present'}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
    Routine trial
  LoopTerminator trials
  Routine end
